OpenViBE-Scenario
0x8c1fc55b = 1.0
0x9f5c4075 = P300 Magic Card
0xf6b2e3fa = bci-examples

Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-p300-magic-card.ov
#0.Output stream 2 -> 0xc67a01dc Channel Selector
  Channel List = Cz;O1;O2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation => #3
  Decimation factor = 4
Sequence stimulations=#0.Output stream 3, Target stimulations=#0.Output stream 4 -> P300 Magic Card Visualisation => #4
  Interface filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card.ui
  Background color = 90,90,90
  Target background color = 10,40,10
  Selected background color = 70,20,20
  Card stimulation base = OVTK_StimulationId_Label_01
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/openvibe-logo.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/arkanoid.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/bomberman.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/doom.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/dott.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/lemmings.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/mario.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/megaman.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/pacman.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/sonic.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/space-invaders.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/worms.png
  Card filename = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/zelda.png
Input signal=#3, Input stimulations=#4 -> Stimulation based epoching => #5
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
#5.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #7
Input signal=#3, Input stimulations=#4 -> Stimulation based epoching => #8
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
#8.Epoched signal -> Epoch average
  Averaging type = Epoch block average
  Epoch count = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/p300-epoch-average.cfg
-> Feature aggregator => #10
Stimulations=#0.Output stream 4, Features for class 1=#7, Features for class 2=#10 -> Classifier trainer
  Strategy to apply = Native
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Filename to save configuration to = ${Player_ScenarioDirectory}/p300-classifier.cfg
  Train trigger = OVTK_StimulationId_Train
  Number of partitions for k-fold test = 5
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Target
  Class 2 label = OVTK_StimulationId_NonTarget
