OpenViBE-Scenario
0x8c1fc55b = 1.0
0x9f5c4075 = Channel Selector tutorial
0xf8034a49 = Inria
Comment
  The Sinus Oscillator box generates
  a 4 channels sinusoidal signal
Comment
  Those 4 channels are displayed with the left
  Signal Display box
Comment
  The Channel Selector box takes only
  the first and fourth channels
  (channel names are 0 indexed)
Comment
  Finally, the right Signal Display box
  displays the 2 selected channels
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Sinus oscillator => #0
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
Signal=#0 -> 0xc67a01dc Signal display "Before"
  Time Scale = 10
  Display Mode = Scan
  EEG display = true
  Manual Vertical Scale = false
  Vertical Scale = 100
#0 -> Channel Selector => #2
  Channel List = 1;4
  Action = Select
  Channel Matching Method = Smart
Signal=#2 -> Signal display "After"
  Time Scale = 10
  Display Mode = Scan
  EEG display = true
  Manual Vertical Scale = false
  Vertical Scale = 100
