OpenViBE-Scenario
0x790d75b8 = Jussi T. Lindgren
0x8c1fc55b = 1.0
0x9f5c4075 = Classification training example
0xf6b2e3fa = box-tutorials
0xf8034a49 = Inria
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  4 channel noise x from Uniform Random (0,1)
  generator is amplified to range (x+1)*10.
Comment
  Applying 4x4 matrix multiplication three times by Spatial
  Filter is used to generate data for 3 classes. For each
  class i, dimension i is the most prominent. Others are
  damped, except dimension 4, which is considered pure noise.

  Signal average boxes turn each chunk of signal into one
  example to classify. It increases the stability of the features.

  The role of the classifier training is to discover the
  decision rule that can tell the 3 streams apart. Note
  that if the coefficients 0.95 in the spatial filters are set to 0,
  a good classification rule is really simple: class = i iff x(i)>0
  (and ignore dimension 4). However, with 0.95, a perfect
  classification is not possible as there is overlap in the classes.

  You can change the matrixes and explore how it affects
  the obtained cross-validation accuracies while changing
  the classifiers and the multiclass strategies.
Comment
  Signal Display can be used to view the data.
  Note that the data the classifier gets has 4
  dimensions, whereas for display purposes the
  signals are catenated in a way that channels 0-3 are
  the data for the first stream, 4-7 for the second one
  and so on.
Comment
  Timeout box controls how much training data is used.

  After training, the Classifier trainer saves the classifier
  in a file which could then in principle be loaded by a
  classifier processor box to classify future data.

  Finally, the scenario stops after the classifier has been saved.

Noise generator
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 64
-> Simple DSP => #1
  Equation = (x+1)*10
-> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0; 0;0.95;0;0; 0;0;0.95;0; 0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
-> Signal average => #3
-> Feature aggregator => #4
#1 -> Spatial Filter
  Spatial Filter Coefficients = 0.95;0;0;0; 0;1;0;0; 0;0;0.95;0; 0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
-> Signal average => #6
-> Feature aggregator => #7
#1 -> Spatial Filter
  Spatial Filter Coefficients = 0.95;0;0;0; 0;0.95;0;0; 0;0;1;0; 0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
-> Signal average => #9
Input 1=#3, Input 2=#6, Input 3=#9 -> 0xc73e83ec Signal Merger => #10
Signal=#10 -> 0xc73e83ec Signal display
  Time Scale = 10
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
#9 -> Feature aggregator => #12
Timeout => #13
  Timeout delay = 20
  Output Stimulation = OVTK_StimulationId_Train
Stimulations=#13, Features for class 1=#4, Features for class 2=#7, Features for class 3=#12 -> Classifier trainer
  Strategy to apply = OneVsAll
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Filename to save configuration to = ${Path_UserData}/classification-training-tutorial-model.xml
  Train trigger = OVTK_StimulationId_Train
  Number of partitions for k-fold test = 5
  Reject class label = OVTK_StimulationId_Label_00
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Class 3 label = OVTK_StimulationId_Label_03
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
