OpenViBE-Scenario
Comment
  This scenario illustrates the use of the Display cue image box.

  The box can be configured to display different images when different
  stimulations are received by it. Right after display, the box sends the
  stimulus also as an output, which is printed to the log by
  Stimulation listener in the current scenario.

  During play, when you press 'a' with Keyboard stimulator
  window having focus, the cue display should flash an image.

  For time critical applications, it may be better to design cue display
  or other visualisations as external applications which then should
  send the related time marker directly into Acquisition Server
  for its proper alignment in the recorded biosignal data.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Keyboard stimulator
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
-> Display cue image
  Display images in full screen = false
  Clear screen Stimulation = OVTK_StimulationId_Label_00
  Cue Image 1 = ${Path_Data}/plugins/simple-visualisation/p300-magic-card/mario.png
  Stimulation 1 = OVTK_StimulationId_Label_01
-> Stimulation listener
  Log level to use = Information
