OpenViBE-Scenario
0x8c1fc55b = 1.0
0x9f5c4075 = Network acquisition example
0xf36a1567 = http://openvibe.inria.fr/tutorial-the-most-basic-openvibe-setup/
0xf6b2e3fa = box-tutorials
0xf8034a49 = Inria
Comment
  The Acquisition Client box
  receives data from the OpenViBE acquisition
  server. You should have the OpenViBE
  acquisition server started and acquiring to
  let this scenario work correctly. In case
  of connection errors, you should read a
  message in the console.
Comment
  The Signal Display box display the
  acquired data.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Signal=#0.Signal strea, Stimulations=#0.Stimulations -> 0xc67a01dc Signal display
  Time Scale = 10
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
