OpenViBE-Scenario
Comment
  There is now two "mode" in signal display, wether the input signal is filtered eeg signal or not.
  In eeg mode, all signals are in the same drawing area, and vertical scale is optimize for eeg dispaly (verticale scale of 100)

  You can enable eeg mode by checking EEG display in box settings.
Comment
  The Generic Stream Reader box
  reads an OpenViBE file from disk and sends
  its content to the following box.
  The OpenViBE file format can store any
  stream of the OpenViBE platform into a file.
Comment
  The Temporal Filter, filters the input signal
  according to the settings.
  Here we use a Butterworth band-pass.
Comment
  The Signal Display box displays
  the content of the file in standard mode.
Comment
  The Signal Display box displays
  the content of the file in EEG mode.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

0xc67a01dc Generic stream reader => #0
  Filename = ${Path_Samples}/signals/bci-motor-imagery.ov
Signal=#0.Output stream 2, Stimulations=#0.Output stream 3 -> 0xc67a01dc Signal display "Raw Signal"
  Time Scale = 10
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100

0xc67a01dc Generic stream reader => #2
  Filename = ${Path_Samples}/signals/bci-motor-imagery.ov
#2.Output stream 2 -> 0xc67a01dc Temporal filter => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
Signal=#3, Stimulations=#2.Output stream 3 -> 0xc67a01dc Signal display "Filtered Signal"
  Time Scale = 10
  Display Mode = Scan
  EEG display = true
  Manual Vertical Scale = false
  Vertical Scale = 0
