OpenViBE-Scenario
Comment
  This scenario illustrates the use of the Signal Merger box.

  The box joins the two artificial signal channels coming from the
  Sinus Oscillator box with the channel received from the
  Time Signal box.

  Hence, the resulting merged stream will have three channels,
  as is seen in the Signal Display during playback.
Comment
  You can browse each box' documentation by selecting the box and pressing F1

Sinus oscillator => #0
  Channel count = 2
  Sampling frequency = 512
  Generated epoch sample count = 32
Time signal => #1
  Sampling frequency = 512
  Generated epoch sample count = 32
Input 1=#0, Input 2=#1 -> Signal Merger => #2
Signal=#2 -> Signal display
  Time Scale = 10
  Display Mode = Scan
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 10
