OpenViBE-Scenario
0x790d75b8 = Jussi T. Lindgren
0x8c1fc55b = 1.0
0x9f5c4075 = OpenViBE to TCP/IP tutorial
0xf6b2e3fa = box-tutorials
0xf8034a49 = Inria
Comment
  This scenario shows how to send data out from Designer to a TCP/IP client

  Its used together with openvibe-examples-openvibe-to-tcpip application.

Sinus oscillator => #0
  Channel count = 5
  Sampling frequency = 256
  Generated epoch sample count = 32
-> Signal to TCP/IP
  Port = 5678
  Stimulus output = Raw
Keyboard stimulator => #2
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
Signal=#0, Stimulations=#2 -> 0xc67a01dc Signal display
  Time Scale = 10
  Display Mode = Scan
  EEG display = true
  Manual Vertical Scale = false
  Vertical Scale = 100
#2 -> Stimuli to TCP/IP
  Port = 5679
  Stimulus output = String
